begin parameters
kp0 3
ku1 14
kp1 15
ku2 98
kp2 75
ku3 686
kp3 375
ku4 4802
Stot 100
end parameters

begin molecule types
A(s~u~p,s~u~p,s~u~p,s~u~p,p)
P(l,r)
end molecule types

begin seed species
A(s~u,s~u,s~u,s~u,p!1).P(l!1,r) Stot
end seed species




begin reaction rules
A(s~u,p!1).P(l!1,r) -> A(s~p,p!1).P(l!2,r).P(l!1,r!2) kp0
A(s~u,p!1).P(l!1,r!2).P(l!2,r) -> A(s~p,p!1).P(l!2,r!3).P(l!3,r).P(l!1,r!2) kp1
A(s~p,p!1).P(l!2,r).P(l!1,r!2) -> A(s~u,p!1).P(l!1,r) ku1
A(s~u,p!1).P(l!1,r!2).P(l!2,r!3).P(l!3,r) -> A(s~p,p!1).P(l!2,r!3).P(l!3,r!4).P(l!4,r).P(l!1,r!2) kp2
A(s~p,p!1).P(l!2,r!3).P(l!3,r).P(l!1,r!2) -> A(s~u,p!1).P(l!1,r!2).P(l!2,r) ku2
A(s~u,p!1).P(l!1,r!2).P(l!2,r!3).P(l!3,r!4).P(l!4,r) -> A(s~p,p!1).P(l!2,r!3).P(l!3,r!4).P(l!4,r!5).P(l!5,r).P(l!1,r!2) kp3
A(s~p,p!1).P(l!2,r!3).P(l!3,r!4).P(l!4,r).P(l!1,r!2) -> A(s~u,p!1).P(l!1,r!2).P(l!2,r!3).P(l!3,r) ku3
A(s~p,p!1).P(l!2,r!3).P(l!3,r!4).P(l!4,r!5).P(l!5,r).P(l!1,r!2) -> A(s~u,p!1).P(l!1,r!2).P(l!2,r!3).P(l!3,r!4).P(l!4,r) ku4
end reaction rules

generate_network({overwrite=>1});