begin parameters
Etot 300
Ftot 300
Stot 300

kOnE 0.7
kOffE 3
kCatE 5.0

kOnF 0.7
kOffF 3
kCatF 5.1
end parameters

begin molecule types
E(s) 
F(s) 
S(x1~u~p,x2~u~p,x3~u~p,x4~u~p,x5~u~p,x6~u~p,x7~u~p,x8~u~p,x9~u~p,x10~u~p)
end molecule types

begin seed species
E(s) Etot
F(s) Ftot
S(x1~u,x2~u,x3~u,x4~u,x5~u,x6~u,x7~u,x8~u,x9~u,x10~u) Stot
end seed species


begin reaction rules
F(s) + S(x1~p) <-> F(s!1).S(x1~p!1) kOnF, kOffF 

F(s!1).S(x1~p!1) -> F(s) + S(x1~u) kCatF
E(s) + S(x1~u) <-> E(s!1).S(x1~u!1) kOnE, kOffE

E(s!1).S(x1~u!1) -> E(s) + S(x1~p) kCatE

F(s) + S(x2~p) <-> F(s!1).S(x2~p!1) kOnF, kOffF 

F(s!1).S(x2~p!1) -> F(s) + S(x2~u) kCatF
E(s) + S(x2~u) <-> E(s!1).S(x2~u!1) kOnE, kOffE

E(s!1).S(x2~u!1) -> E(s) + S(x2~p) kCatE

F(s) + S(x3~p) <-> F(s!1).S(x3~p!1) kOnF, kOffF 

F(s!1).S(x3~p!1) -> F(s) + S(x3~u) kCatF
E(s) + S(x3~u) <-> E(s!1).S(x3~u!1) kOnE, kOffE

E(s!1).S(x3~u!1) -> E(s) + S(x3~p) kCatE

F(s) + S(x4~p) <-> F(s!1).S(x4~p!1) kOnF, kOffF 

F(s!1).S(x4~p!1) -> F(s) + S(x4~u) kCatF
E(s) + S(x4~u) <-> E(s!1).S(x4~u!1) kOnE, kOffE

E(s!1).S(x4~u!1) -> E(s) + S(x4~p) kCatE

F(s) + S(x5~p) <-> F(s!1).S(x5~p!1) kOnF, kOffF 

F(s!1).S(x5~p!1) -> F(s) + S(x5~u) kCatF
E(s) + S(x5~u) <-> E(s!1).S(x5~u!1) kOnE, kOffE

E(s!1).S(x5~u!1) -> E(s) + S(x5~p) kCatE

F(s) + S(x6~p) <-> F(s!1).S(x6~p!1) kOnF, kOffF 

F(s!1).S(x6~p!1) -> F(s) + S(x6~u) kCatF
E(s) + S(x6~u) <-> E(s!1).S(x6~u!1) kOnE, kOffE

E(s!1).S(x6~u!1) -> E(s) + S(x6~p) kCatE

F(s) + S(x7~p) <-> F(s!1).S(x7~p!1) kOnF, kOffF 

F(s!1).S(x7~p!1) -> F(s) + S(x7~u) kCatF
E(s) + S(x7~u) <-> E(s!1).S(x7~u!1) kOnE, kOffE

E(s!1).S(x7~u!1) -> E(s) + S(x7~p) kCatE

F(s) + S(x8~p) <-> F(s!1).S(x8~p!1) kOnF, kOffF 

F(s!1).S(x8~p!1) -> F(s) + S(x8~u) kCatF
E(s) + S(x8~u) <-> E(s!1).S(x8~u!1) kOnE, kOffE

E(s!1).S(x8~u!1) -> E(s) + S(x8~p) kCatE

F(s) + S(x9~p) <-> F(s!1).S(x9~p!1) kOnF, kOffF 

F(s!1).S(x9~p!1) -> F(s) + S(x9~u) kCatF
E(s) + S(x9~u) <-> E(s!1).S(x9~u!1) kOnE, kOffE

E(s!1).S(x9~u!1) -> E(s) + S(x9~p) kCatE

F(s) + S(x10~p) <-> F(s!1).S(x10~p!1) kOnF, kOffF 

F(s!1).S(x10~p!1) -> F(s) + S(x10~u) kCatF
E(s) + S(x10~u) <-> E(s!1).S(x10~u!1) kOnE, kOffE

E(s!1).S(x10~u!1) -> E(s) + S(x10~p) kCatE


end reaction rules

generate_network({overwrite=>1});
