setOption("SpeciesLabel","HNauty")
begin model
begin parameters
    kp1  1
    km1  1
    kp2  1
    km2  1
    kp3  1
    km3  1
    R0   3e5
    L0   3e5
end parameters

begin seed species
    R(r,r) R0
    L(l,l) L0
end seed species

begin reaction rules
    # Ligand addition
    R(r) + L(l,l) <-> R(r!1).L(l!1,l) kp1,km1

    # Chain elongation
    R(r) + L(l,l!+) <-> R(r!1).L(l!1,l!+) kp2,km2

    # Ring closure
    R(r).L(l) <-> R(r!1).L(l!1) kp3,km3
end reaction rules
end model

## actions ##
generate_network({overwrite=>1,max_stoich=>{R=>5,L=>5}})
simulate({method=>"ode",t_end=>20,n_steps=>200,verbose=>1,atol=>1e-12,rtol=>1e-12})
