begin parameters
Stot 100
n_k0 0
kp0 3
ku1 14
n_k1 1
kp1 15
ku2 98
n_k2 2
kp2 75
ku3 686
n_k3 3
kp3 375
ku4 4802
n_k4 4
kp4 1875
ku5 33614
n_k5 5
kp5 9375
ku6 235298
n_k6 6
kp6 46875
ku7 1647086
n_k7 7
kp7 234375
ku8 11529602
n_k8 8
kp8 1171875
ku9 80707214
n_k9 9
kp9 5859375
ku10 564950498
end parameters

begin molecule types
A(s1~u~p,s2~u~p,s3~u~p,s4~u~p,s5~u~p,s6~u~p,s7~u~p,s8~u~p,s9~u~p)
end molecule types

begin seed species
%init: A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) Stot
end seed species


begin reaction rules
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) ku5
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) kp5
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) ku5
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) kp5
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) ku5
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) kp5
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) ku5
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) kp5
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) ku5


A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) kp4
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) kp4
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) ku4
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) kp4
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) ku4
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) kp4
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) ku4
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) kp4
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) ku4


A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) ku6
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) ku6
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) ku6
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) kp6
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) ku6
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) kp6
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) ku6
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) kp6
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) ku6


A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) kp5
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) ku5
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) ku5
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) kp5
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) ku5
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) kp5
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) ku5
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) kp5
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) ku5


A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) ku4
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) kp4
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) kp4
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) kp4
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) ku4
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) kp4
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) ku4
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) kp4
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) ku4


A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) kp3
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) kp3
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) kp3
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) kp3
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) ku3
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) kp3
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) ku3
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) kp3
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) ku3


A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) ku5
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) ku5
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) kp5
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) kp5
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) ku5
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) kp5
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) ku5
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) kp5
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) ku5


A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) kp4
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) ku4
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) kp4
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) kp4
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) ku4
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) kp4
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) ku4
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) kp4
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) ku4


A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) ku6
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) kp6
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) ku6
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) ku6
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) ku6
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) kp6
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) ku6
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) kp6
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) ku6


A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) kp5
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) kp5
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) ku5
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) ku5
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) ku5
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) kp5
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) ku5
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) kp5
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) ku5


A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) ku7
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) ku7
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) ku7
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) ku7
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) ku7
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) kp7
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) ku7
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) kp7
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) ku7


A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) kp6
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) ku6
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) ku6
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) ku6
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) ku6
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) kp6
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) ku6
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) kp6
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) ku6


A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) ku5
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) kp5
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) kp5
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) ku5
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) ku5
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) kp5
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) ku5
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) kp5
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) ku5


A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) kp4
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) kp4
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) kp4
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) ku4
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) ku4
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) kp4
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) ku4
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) kp4
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) ku4


A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) ku6
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) ku6
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) kp6
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) ku6
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) ku6
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) kp6
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) ku6
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) kp6
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) ku6


A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) kp5
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) ku5
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) kp5
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) ku5
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) ku5
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) kp5
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) ku5
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) kp5
A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) ku5


A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) ku4
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) kp4
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) ku4
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) kp4
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) kp4
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) kp4
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) ku4
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) kp4
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) ku4


A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) kp3
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) kp3
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) ku3
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) kp3
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) kp3
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) kp3
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) ku3
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) kp3
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) ku3


A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) ku5
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) ku5
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) ku5
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) kp5
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) kp5
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) kp5
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) ku5
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) kp5
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) ku5


A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) kp4
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) ku4
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) ku4
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) kp4
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) kp4
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) kp4
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) ku4
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) kp4
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) ku4


A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) ku3
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) kp3
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) kp3
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) kp3
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) kp3
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) kp3
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) ku3
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) kp3
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) ku3


A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) kp2
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) kp2
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) kp2
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) kp2
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) kp2
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) kp2
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) ku2
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) kp2
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) ku2


A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) ku4
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) ku4
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) kp4
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) kp4
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) kp4
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) kp4
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) ku4
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) kp4
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) ku4


A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) kp3
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) ku3
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) kp3
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) kp3
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) kp3
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) kp3
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) ku3
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) kp3
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) ku3


A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) ku5
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) kp5
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) ku5
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) ku5
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) kp5
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) kp5
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) ku5
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) kp5
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) ku5


A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) kp4
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) kp4
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) ku4
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) ku4
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) kp4
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) kp4
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) ku4
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) kp4
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) ku4


A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) ku6
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) ku6
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) ku6
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) ku6
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) kp6
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) kp6
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) ku6
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) kp6
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) ku6


A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) kp5
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) ku5
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) ku5
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) ku5
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) kp5
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) kp5
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) ku5
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) kp5
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) ku5


A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) ku4
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) kp4
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) kp4
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) ku4
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) kp4
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) kp4
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) ku4
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) kp4
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) ku4


A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) kp3
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) kp3
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) kp3
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) ku3
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) kp3
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) kp3
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) ku3
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) kp3
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) ku3


A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) ku5
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) ku5
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) kp5
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) ku5
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) kp5
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) kp5
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) ku5
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) kp5
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) ku5


A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) kp4
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) ku4
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) kp4
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) ku4
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) kp4
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) kp4
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) ku4
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) kp4
A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) ku4


A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) ku6
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) kp6
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) ku6
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) kp6
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) ku6
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) ku6
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) ku6
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) kp6
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) ku6


A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) kp5
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) kp5
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) ku5
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) kp5
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) ku5
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) ku5
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) ku5
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) kp5
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) ku5


A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) ku7
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) ku7
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) ku7
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) kp7
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) ku7
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) ku7
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) ku7
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) kp7
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) ku7


A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) kp6
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) ku6
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) ku6
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) kp6
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) ku6
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) ku6
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) ku6
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) kp6
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) ku6


A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) ku5
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) kp5
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) kp5
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) kp5
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) ku5
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) ku5
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) ku5
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) kp5
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) ku5


A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) kp4
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) kp4
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) kp4
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) kp4
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) ku4
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) ku4
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) ku4
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) kp4
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) ku4


A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) ku6
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) ku6
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) kp6
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) kp6
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) ku6
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) ku6
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) ku6
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) kp6
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) ku6


A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) kp5
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) ku5
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) kp5
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) kp5
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) ku5
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) ku5
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) ku5
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) kp5
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) ku5


A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) ku7
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) kp7
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) ku7
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) ku7
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) ku7
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) ku7
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) ku7
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) kp7
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) ku7


A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) kp6
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) kp6
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) ku6
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) ku6
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) ku6
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) ku6
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) ku6
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) kp6
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) ku6


A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) ku8
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) ku8
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) ku8
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) ku8
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) ku8
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) ku8
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) ku8
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) kp8
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) ku8


A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) kp7
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) ku7
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) ku7
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) ku7
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) ku7
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) ku7
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) ku7
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) kp7
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) ku7


A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) ku6
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) kp6
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) kp6
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) ku6
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) ku6
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) ku6
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) ku6
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) kp6
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) ku6


A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) kp5
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) kp5
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) kp5
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) ku5
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) ku5
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) ku5
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) ku5
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) kp5
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) ku5


A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) ku7
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) ku7
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) kp7
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) ku7
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) ku7
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) ku7
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) ku7
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) kp7
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) ku7


A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) kp6
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) ku6
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) kp6
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) ku6
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) ku6
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) ku6
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) ku6
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) kp6
A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) ku6


A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) ku5
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) kp5
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) ku5
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) kp5
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) kp5
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) ku5
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) ku5
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) kp5
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) ku5


A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) kp4
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) kp4
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) ku4
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) kp4
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) kp4
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) ku4
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) ku4
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) kp4
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) ku4


A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) ku6
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) ku6
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) ku6
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) kp6
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) kp6
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) ku6
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) ku6
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) kp6
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) ku6


A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) kp5
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) ku5
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) ku5
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) kp5
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) kp5
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) ku5
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) ku5
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) kp5
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) ku5


A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) ku4
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) kp4
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) kp4
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) kp4
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) kp4
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) ku4
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) ku4
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) kp4
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) ku4


A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) kp3
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) kp3
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) kp3
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) kp3
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) kp3
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) ku3
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) ku3
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) kp3
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) ku3


A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) ku5
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) ku5
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) kp5
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) kp5
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) kp5
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) ku5
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) ku5
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) kp5
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) ku5


A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) kp4
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) ku4
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) kp4
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) kp4
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) kp4
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) ku4
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) ku4
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) kp4
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) ku4


A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) ku6
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) kp6
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) ku6
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) ku6
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) kp6
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) ku6
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) ku6
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) kp6
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) ku6


A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) kp5
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) kp5
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) ku5
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) ku5
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) kp5
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) ku5
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) ku5
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) kp5
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) ku5


A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) ku7
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) ku7
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) ku7
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) ku7
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) kp7
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) ku7
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) ku7
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) kp7
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) ku7


A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) kp6
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) ku6
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) ku6
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) ku6
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) kp6
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) ku6
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) ku6
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) kp6
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) ku6


A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) ku5
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) kp5
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) kp5
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) ku5
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) kp5
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) ku5
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) ku5
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) kp5
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) ku5


A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) kp4
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) kp4
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) kp4
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) ku4
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) kp4
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) ku4
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) ku4
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) kp4
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) ku4


A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) ku6
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) ku6
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) kp6
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) ku6
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) kp6
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) ku6
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) ku6
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) kp6
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) ku6


A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) kp5
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) ku5
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) kp5
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) ku5
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) kp5
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) ku5
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) ku5
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) kp5
A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) ku5


A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) ku4
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) kp4
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) ku4
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) kp4
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) ku4
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) kp4
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) kp4
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) kp4
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) ku4


A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) kp3
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) kp3
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) ku3
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) kp3
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) ku3
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) kp3
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) kp3
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) kp3
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) ku3


A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) ku5
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) ku5
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) ku5
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) kp5
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) ku5
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) kp5
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) kp5
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) kp5
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) ku5


A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) kp4
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) ku4
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) ku4
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) kp4
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) ku4
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) kp4
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) kp4
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) kp4
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) ku4


A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) ku3
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) kp3
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) kp3
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) kp3
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) ku3
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) kp3
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) kp3
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) kp3
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) ku3


A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) kp2
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) kp2
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) kp2
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) kp2
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) ku2
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) kp2
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) kp2
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) kp2
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) ku2


A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) ku4
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) ku4
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) kp4
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) kp4
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) ku4
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) kp4
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) kp4
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) kp4
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) ku4


A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) kp3
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) ku3
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) kp3
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) kp3
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) ku3
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) kp3
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) kp3
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) kp3
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) ku3


A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) ku5
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) kp5
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) ku5
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) ku5
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) ku5
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) kp5
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) kp5
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) kp5
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) ku5


A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) kp4
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) kp4
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) ku4
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) ku4
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) ku4
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) kp4
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) kp4
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) kp4
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) ku4


A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) ku6
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) ku6
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) ku6
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) ku6
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) ku6
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) kp6
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) kp6
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) kp6
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) ku6


A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) kp5
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) ku5
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) ku5
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) ku5
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) ku5
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) kp5
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) kp5
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) kp5
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) ku5


A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) ku4
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) kp4
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) kp4
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) ku4
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) ku4
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) kp4
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) kp4
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) kp4
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) ku4


A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) kp3
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) kp3
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) kp3
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) ku3
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) ku3
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) kp3
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) kp3
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) kp3
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) ku3


A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) ku5
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) ku5
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) kp5
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) ku5
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) ku5
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) kp5
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) kp5
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) kp5
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) ku5


A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) kp4
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) ku4
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) kp4
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) ku4
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) ku4
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) kp4
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) kp4
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) kp4
A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) ku4


A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) ku3
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) kp3
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) ku3
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) kp3
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) kp3
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) kp3
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) kp3
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) kp3
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) ku3


A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) kp2
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) kp2
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) ku2
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) kp2
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) kp2
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) kp2
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) kp2
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) kp2
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) ku2


A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) ku4
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) ku4
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) ku4
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) kp4
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) kp4
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) kp4
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) kp4
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) kp4
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) ku4


A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) kp3
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) ku3
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) ku3
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) kp3
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) kp3
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) kp3
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) kp3
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) kp3
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) ku3


A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) ku2
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) kp2
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) kp2
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) kp2
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) kp2
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) kp2
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) kp2
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) kp2
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) ku2


A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) kp1
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) kp1
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) kp1
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) kp1
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) kp1
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) kp1
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) kp1
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) kp1
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) ku1


A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) ku3
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) ku3
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) kp3
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) kp3
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) kp3
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) kp3
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) kp3
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) kp3
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) ku3


A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) kp2
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) ku2
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) kp2
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) kp2
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) kp2
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) kp2
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) kp2
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) kp2
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) ku2


A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) ku4
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) kp4
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) ku4
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) ku4
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) kp4
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) kp4
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) kp4
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) kp4
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) ku4


A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) kp3
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) kp3
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) ku3
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) ku3
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) kp3
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) kp3
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) kp3
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) kp3
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) ku3


A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) ku5
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) ku5
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) ku5
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) ku5
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) kp5
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) kp5
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) kp5
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) kp5
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) ku5


A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) kp4
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) ku4
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) ku4
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) ku4
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) kp4
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) kp4
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) kp4
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) kp4
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) ku4


A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) ku3
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) kp3
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) kp3
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) ku3
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) kp3
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) kp3
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) kp3
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) kp3
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) ku3


A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) kp2
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) kp2
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) kp2
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) ku2
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) kp2
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) kp2
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) kp2
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) kp2
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) ku2


A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) ku4
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) ku4
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) kp4
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) ku4
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) kp4
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) kp4
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) kp4
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) kp4
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) ku4


A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) kp3
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) ku3
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) kp3
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) ku3
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) kp3
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) kp3
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) kp3
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) kp3
A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) ku3


A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) ku5
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) kp5
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) ku5
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) kp5
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) ku5
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) ku5
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) kp5
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) kp5
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) ku5


A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) kp4
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) kp4
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) ku4
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) kp4
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) ku4
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) ku4
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) kp4
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) kp4
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) ku4


A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) ku6
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) ku6
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) ku6
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) kp6
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) ku6
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) ku6
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) kp6
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) kp6
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) ku6


A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) kp5
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) ku5
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) ku5
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) kp5
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) ku5
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) ku5
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) kp5
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) kp5
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) ku5


A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) ku4
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) kp4
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) kp4
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) kp4
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) ku4
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) ku4
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) kp4
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) kp4
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) ku4


A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) kp3
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) kp3
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) kp3
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) kp3
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) ku3
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) ku3
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) kp3
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) kp3
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) ku3


A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) ku5
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) ku5
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) kp5
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) kp5
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) ku5
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) ku5
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) kp5
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) kp5
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) ku5


A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) kp4
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) ku4
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) kp4
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) kp4
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) ku4
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) ku4
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) kp4
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) kp4
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) ku4


A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) ku6
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) kp6
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) ku6
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) ku6
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) ku6
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) ku6
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) kp6
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) kp6
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) ku6


A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) kp5
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) kp5
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) ku5
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) ku5
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) ku5
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) ku5
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) kp5
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) kp5
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) ku5


A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) ku7
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) ku7
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) ku7
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) ku7
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) ku7
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) ku7
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) kp7
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) kp7
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) ku7


A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) kp6
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) ku6
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) ku6
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) ku6
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) ku6
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) ku6
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) kp6
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) kp6
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) ku6


A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) ku5
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) kp5
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) kp5
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) ku5
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) ku5
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) ku5
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) kp5
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) kp5
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) ku5


A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) kp4
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) kp4
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) kp4
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) ku4
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) ku4
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) ku4
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) kp4
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) kp4
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) ku4


A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) ku6
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) ku6
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) kp6
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) ku6
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) ku6
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) ku6
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) kp6
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) kp6
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) ku6


A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) kp5
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) ku5
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) kp5
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) ku5
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) ku5
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) ku5
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) kp5
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) kp5
A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) ku5


A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) ku4
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) kp4
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) ku4
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) kp4
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) kp4
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) ku4
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) kp4
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) kp4
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) ku4


A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) kp3
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) kp3
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) ku3
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) kp3
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) kp3
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) ku3
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) kp3
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) kp3
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) ku3


A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) ku5
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) ku5
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) ku5
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) kp5
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) kp5
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) ku5
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) kp5
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) kp5
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) ku5


A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) kp4
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) ku4
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) ku4
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) kp4
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) kp4
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) ku4
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) kp4
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) kp4
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) ku4


A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) ku3
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) kp3
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) kp3
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) kp3
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) kp3
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) ku3
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) kp3
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) kp3
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) ku3


A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) kp2
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) kp2
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) kp2
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) kp2
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) kp2
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) ku2
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) kp2
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) kp2
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) ku2


A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) ku4
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) ku4
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) kp4
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) kp4
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) kp4
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) ku4
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) kp4
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) kp4
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) ku4


A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) kp3
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) ku3
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) kp3
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) kp3
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) kp3
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) ku3
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) kp3
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) kp3
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) ku3


A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) ku5
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) kp5
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) ku5
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) ku5
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) kp5
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) ku5
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) kp5
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) kp5
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) ku5


A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) kp4
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) kp4
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) ku4
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) ku4
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) kp4
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) ku4
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) kp4
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) kp4
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) ku4


A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) ku6
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) ku6
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) ku6
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) ku6
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) kp6
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) ku6
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) kp6
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) kp6
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) ku6


A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) kp5
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) ku5
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) ku5
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) ku5
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) kp5
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) ku5
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) kp5
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) kp5
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) ku5


A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) ku4
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) kp4
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) kp4
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) ku4
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) kp4
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) ku4
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) kp4
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) kp4
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) ku4


A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) kp3
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) kp3
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) kp3
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) ku3
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) kp3
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) ku3
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) kp3
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) kp3
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) ku3


A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) ku5
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) ku5
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) kp5
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) ku5
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) kp5
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) ku5
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) kp5
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) kp5
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) ku5


A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) kp4
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) ku4
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) kp4
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) ku4
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) kp4
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) ku4
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) kp4
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) kp4
A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) ku4


A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) ku6
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) kp6
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) ku6
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) kp6
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) ku6
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) kp6
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) ku6
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) ku6
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) ku6


A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) kp5
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) kp5
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) ku5
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) kp5
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) ku5
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) kp5
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) ku5
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) ku5
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) ku5


A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) ku7
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) ku7
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) ku7
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) kp7
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) ku7
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) kp7
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) ku7
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) ku7
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) ku7


A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) kp6
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) ku6
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) ku6
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) kp6
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) ku6
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) kp6
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) ku6
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) ku6
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) ku6


A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) ku5
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) kp5
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) kp5
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) kp5
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) ku5
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) kp5
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) ku5
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) ku5
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) ku5


A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) kp4
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) kp4
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) kp4
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) kp4
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) ku4
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) kp4
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) ku4
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) ku4
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) ku4


A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) ku6
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) ku6
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) kp6
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) kp6
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) ku6
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) kp6
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) ku6
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) ku6
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) ku6


A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) kp5
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) ku5
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) kp5
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) kp5
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) ku5
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) kp5
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) ku5
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) ku5
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) ku5


A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) ku7
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) kp7
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) ku7
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) ku7
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) ku7
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) kp7
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) ku7
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) ku7
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) ku7


A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) kp6
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) kp6
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) ku6
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) ku6
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) ku6
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) kp6
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) ku6
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) ku6
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) ku6


A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) ku8
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) ku8
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) ku8
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) ku8
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) ku8
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) kp8
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) ku8
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) ku8
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) ku8


A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) kp7
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) ku7
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) ku7
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) ku7
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) ku7
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) kp7
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) ku7
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) ku7
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) ku7


A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) ku6
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) kp6
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) kp6
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) ku6
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) ku6
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) kp6
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) ku6
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) ku6
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) ku6


A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) kp5
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) kp5
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) kp5
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) ku5
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) ku5
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) kp5
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) ku5
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) ku5
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) ku5


A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) ku7
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) ku7
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) kp7
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) ku7
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) ku7
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) kp7
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) ku7
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) ku7
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) ku7


A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) kp6
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) ku6
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) kp6
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) ku6
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) ku6
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) kp6
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) ku6
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) ku6
A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) ku6


A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) ku5
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) kp5
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) ku5
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) kp5
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) kp5
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) kp5
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) ku5
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) ku5
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) ku5


A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) kp4
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) kp4
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) ku4
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) kp4
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) kp4
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) kp4
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) ku4
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) ku4
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) ku4


A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) ku6
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) ku6
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) ku6
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) kp6
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) kp6
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) kp6
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) ku6
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) ku6
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) ku6


A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) kp5
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) ku5
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) ku5
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) kp5
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) kp5
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) kp5
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) ku5
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) ku5
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) ku5


A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) ku4
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) kp4
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) kp4
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) kp4
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) kp4
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) kp4
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) ku4
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) ku4
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) ku4


A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) kp3
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) kp3
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) kp3
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) kp3
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) kp3
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) kp3
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) ku3
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) ku3
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) ku3


A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) ku5
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) ku5
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) kp5
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) kp5
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) kp5
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) kp5
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) ku5
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) ku5
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) ku5


A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) kp4
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) ku4
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) kp4
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) kp4
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) kp4
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) kp4
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) ku4
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) ku4
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) ku4


A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) ku6
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) kp6
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) ku6
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) ku6
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) kp6
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) kp6
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) ku6
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) ku6
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) ku6


A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) kp5
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) kp5
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) ku5
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) ku5
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) kp5
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) kp5
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) ku5
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) ku5
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) ku5


A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) ku7
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) ku7
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) ku7
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) ku7
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) kp7
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) kp7
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) ku7
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) ku7
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) ku7


A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) kp6
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) ku6
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) ku6
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) ku6
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) kp6
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) kp6
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) ku6
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) ku6
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) ku6


A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) ku5
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) kp5
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) kp5
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) ku5
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) kp5
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) kp5
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) ku5
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) ku5
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) ku5


A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) kp4
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) kp4
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) kp4
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) ku4
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) kp4
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) kp4
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) ku4
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) ku4
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) ku4


A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) ku6
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) ku6
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) kp6
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) ku6
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) kp6
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) kp6
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) ku6
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) ku6
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) ku6


A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) kp5
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) ku5
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) kp5
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) ku5
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) kp5
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) kp5
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) ku5
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) ku5
A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) ku5


A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) ku7
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) kp7
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) ku7
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) kp7
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) ku7
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) ku7
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) ku7
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) ku7
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) ku7


A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) kp6
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) kp6
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) ku6
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) kp6
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) ku6
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) ku6
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) ku6
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) ku6
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) ku6


A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) ku8
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) ku8
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) ku8
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) kp8
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) ku8
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) ku8
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) ku8
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) ku8
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) ku8


A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) kp7
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) ku7
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) ku7
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) kp7
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) ku7
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) ku7
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) ku7
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) ku7
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) ku7


A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) ku6
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) kp6
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) kp6
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) kp6
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) ku6
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) ku6
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) ku6
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) ku6
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) ku6


A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) kp5
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) kp5
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) kp5
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) kp5
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) ku5
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) ku5
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) ku5
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) ku5
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) ku5


A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) ku7
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) ku7
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) kp7
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) kp7
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) ku7
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) ku7
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) ku7
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) ku7
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) ku7


A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) kp6
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) ku6
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) kp6
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) kp6
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) ku6
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) ku6
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) ku6
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) ku6
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) ku6


A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) ku8
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) kp8
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) ku8
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) ku8
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) ku8
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) ku8
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) ku8
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) ku8
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) ku8


A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) kp7
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) kp7
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) ku7
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) ku7
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) ku7
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) ku7
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) ku7
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) ku7
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) ku7


A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) ku9
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) ku9
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) ku9
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) ku9
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) ku9
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) ku9
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) ku9
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) ku9
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) ku9


A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) kp8
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) ku8
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) ku8
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) ku8
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) ku8
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) ku8
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) ku8
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) ku8
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) ku8


A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) ku7
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) kp7
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) kp7
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) ku7
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) ku7
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) ku7
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) ku7
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) ku7
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) ku7


A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) kp6
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) kp6
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) kp6
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) ku6
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) ku6
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) ku6
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) ku6
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) ku6
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) ku6


A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) ku8
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) ku8
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) kp8
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) ku8
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) ku8
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) ku8
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) ku8
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) ku8
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) ku8


A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) kp7
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) ku7
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) kp7
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) ku7
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) ku7
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) ku7
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) ku7
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) ku7
A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) ku7


A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) ku6
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) kp6
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) ku6
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) kp6
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) kp6
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) ku6
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) ku6
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) ku6
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) ku6


A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) kp5
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) kp5
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) ku5
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) kp5
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) kp5
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) ku5
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) ku5
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) ku5
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) ku5


A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) ku7
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) ku7
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) ku7
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) kp7
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) kp7
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) ku7
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) ku7
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) ku7
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) ku7


A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) kp6
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) ku6
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) ku6
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) kp6
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) kp6
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) ku6
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) ku6
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) ku6
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) ku6


A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) ku5
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) kp5
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) kp5
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) kp5
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) kp5
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) ku5
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) ku5
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) ku5
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) ku5


A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) kp4
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) kp4
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) kp4
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) kp4
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) kp4
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) ku4
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) ku4
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) ku4
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) ku4


A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) ku6
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) ku6
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) kp6
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) kp6
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) kp6
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) ku6
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) ku6
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) ku6
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) ku6


A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) kp5
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) ku5
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) kp5
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) kp5
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) kp5
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) ku5
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) ku5
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) ku5
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) ku5


A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) ku7
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) kp7
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) ku7
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) ku7
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) kp7
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) ku7
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) ku7
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) ku7
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) ku7


A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) kp6
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) kp6
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) ku6
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) ku6
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) kp6
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) ku6
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) ku6
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) ku6
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) ku6


A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) ku8
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) ku8
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) ku8
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) ku8
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) kp8
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) ku8
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) ku8
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) ku8
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) ku8


A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) kp7
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) ku7
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) ku7
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) ku7
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) kp7
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) ku7
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) ku7
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) ku7
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) ku7


A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) ku6
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) kp6
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) kp6
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) ku6
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) kp6
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) ku6
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) ku6
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) ku6
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) ku6


A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) kp5
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) kp5
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) kp5
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) ku5
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) kp5
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) ku5
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) ku5
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) ku5
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) ku5


A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) ku7
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) ku7
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) kp7
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) ku7
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) kp7
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) ku7
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) ku7
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) ku7
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) ku7


A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) kp6
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) ku6
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) kp6
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) ku6
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) kp6
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) ku6
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) ku6
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) ku6
A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) ku6


A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) ku5
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) kp5
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) ku5
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) kp5
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) ku5
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) kp5
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) kp5
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) ku5
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) ku5


A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) kp4
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) kp4
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) ku4
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) kp4
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) ku4
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) kp4
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) kp4
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) ku4
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) ku4


A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) ku6
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) ku6
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) ku6
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) kp6
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) ku6
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) kp6
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) kp6
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) ku6
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) ku6


A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) kp5
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) ku5
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) ku5
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) kp5
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) ku5
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) kp5
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) kp5
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) ku5
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) ku5


A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) ku4
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) kp4
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) kp4
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) kp4
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) ku4
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) kp4
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) kp4
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) ku4
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) ku4


A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) kp3
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) kp3
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) kp3
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) kp3
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) ku3
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) kp3
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) kp3
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) ku3
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) ku3


A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) ku5
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) ku5
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) kp5
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) kp5
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) ku5
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) kp5
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) kp5
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) ku5
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) ku5


A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) kp4
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) ku4
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) kp4
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) kp4
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) ku4
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) kp4
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) kp4
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) ku4
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) ku4


A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) ku6
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) kp6
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) ku6
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) ku6
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) ku6
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) kp6
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) kp6
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) ku6
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) ku6


A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) kp5
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) kp5
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) ku5
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) ku5
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) ku5
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) kp5
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) kp5
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) ku5
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) ku5


A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) ku7
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) ku7
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) ku7
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) ku7
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) ku7
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) kp7
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) kp7
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) ku7
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) ku7


A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) kp6
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) ku6
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) ku6
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) ku6
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) ku6
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) kp6
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) kp6
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) ku6
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) ku6


A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) ku5
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) kp5
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) kp5
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) ku5
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) ku5
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) kp5
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) kp5
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) ku5
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) ku5


A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) kp4
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) kp4
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) kp4
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) ku4
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) ku4
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) kp4
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) kp4
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) ku4
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) ku4


A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) ku6
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) ku6
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) kp6
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) ku6
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) ku6
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) kp6
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) kp6
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) ku6
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) ku6


A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) kp5
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) ku5
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) kp5
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) ku5
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) ku5
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) kp5
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) kp5
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) ku5
A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) ku5


A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) ku4
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) kp4
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) ku4
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) kp4
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) kp4
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) kp4
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) kp4
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) ku4
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) ku4


A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) kp3
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) kp3
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) ku3
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) kp3
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) kp3
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) kp3
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) kp3
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) ku3
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) ku3


A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) ku5
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) ku5
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) ku5
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) kp5
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) kp5
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) kp5
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) kp5
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) ku5
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) ku5


A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) kp4
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) ku4
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) ku4
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) kp4
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) kp4
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) kp4
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) kp4
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) ku4
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) ku4


A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) ku3
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) kp3
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) kp3
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) kp3
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) kp3
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) kp3
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) kp3
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) ku3
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) ku3


A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) kp2
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) kp2
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) kp2
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) kp2
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) kp2
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) kp2
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) kp2
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) ku2
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) ku2


A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) ku4
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) ku4
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) kp4
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) kp4
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) kp4
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) kp4
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) kp4
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) ku4
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) ku4


A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) kp3
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) ku3
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) kp3
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) kp3
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) kp3
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) kp3
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) kp3
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) ku3
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) ku3


A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) ku5
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) kp5
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) ku5
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) ku5
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) kp5
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) kp5
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) kp5
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) ku5
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) ku5


A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) kp4
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) kp4
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) ku4
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) ku4
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) kp4
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) kp4
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) kp4
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) ku4
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) ku4


A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) ku6
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) ku6
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) ku6
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) ku6
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) kp6
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) kp6
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) kp6
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) ku6
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) ku6


A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) kp5
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) ku5
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) ku5
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) ku5
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) kp5
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) kp5
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) kp5
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) ku5
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) ku5


A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) ku4
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) kp4
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) kp4
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) ku4
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) kp4
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) kp4
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) kp4
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) ku4
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) ku4


A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) kp3
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) kp3
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) kp3
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) ku3
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) kp3
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) kp3
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) kp3
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) ku3
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) ku3


A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) ku5
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) ku5
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) kp5
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) ku5
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) kp5
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) kp5
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) kp5
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) ku5
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) ku5


A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) kp4
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) ku4
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) kp4
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) ku4
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) kp4
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) kp4
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) kp4
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) ku4
A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) ku4


A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) ku6
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) kp6
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) ku6
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) kp6
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) ku6
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) ku6
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) kp6
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) ku6
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) ku6


A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) kp5
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) kp5
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) ku5
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) kp5
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) ku5
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) ku5
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) kp5
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) ku5
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) ku5


A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) ku7
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) ku7
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) ku7
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) kp7
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) ku7
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) ku7
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) kp7
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) ku7
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) ku7


A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) kp6
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) ku6
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) ku6
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) kp6
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) ku6
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) ku6
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) kp6
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) ku6
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) ku6


A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) ku5
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) kp5
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) kp5
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) kp5
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) ku5
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) ku5
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) kp5
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) ku5
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) ku5


A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) kp4
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) kp4
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) kp4
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) kp4
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) ku4
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) ku4
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) kp4
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) ku4
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) ku4


A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) ku6
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) ku6
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) kp6
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) kp6
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) ku6
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) ku6
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) kp6
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) ku6
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) ku6


A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) kp5
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) ku5
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) kp5
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) kp5
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) ku5
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) ku5
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) kp5
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) ku5
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) ku5


A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) ku7
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) kp7
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) ku7
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) ku7
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) ku7
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) ku7
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) kp7
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) ku7
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) ku7


A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) kp6
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) kp6
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) ku6
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) ku6
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) ku6
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) ku6
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) kp6
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) ku6
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) ku6


A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) ku8
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) ku8
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) ku8
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) ku8
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) ku8
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) ku8
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) kp8
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) ku8
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) ku8


A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) kp7
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) ku7
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) ku7
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) ku7
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) ku7
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) ku7
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) kp7
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) ku7
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) ku7


A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) ku6
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) kp6
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) kp6
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) ku6
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) ku6
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) ku6
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) kp6
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) ku6
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) ku6


A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) kp5
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) kp5
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) kp5
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) ku5
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) ku5
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) ku5
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) kp5
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) ku5
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) ku5


A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) ku7
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) ku7
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) kp7
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) ku7
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) ku7
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) ku7
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) kp7
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) ku7
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) ku7


A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) kp6
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) ku6
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) kp6
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) ku6
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) ku6
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) ku6
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) kp6
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) ku6
A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) ku6


A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) ku5
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) kp5
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) ku5
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) kp5
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) kp5
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) ku5
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) kp5
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) ku5
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) ku5


A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) kp4
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) kp4
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) ku4
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) kp4
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) kp4
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) ku4
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) kp4
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) ku4
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) ku4


A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) ku6
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) ku6
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) ku6
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) kp6
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) kp6
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) ku6
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) kp6
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) ku6
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) ku6


A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) kp5
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) ku5
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) ku5
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) kp5
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) kp5
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) ku5
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) kp5
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) ku5
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) ku5


A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) ku4
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) kp4
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) kp4
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) kp4
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) kp4
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) ku4
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) kp4
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) ku4
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) ku4


A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) kp3
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) kp3
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) kp3
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) kp3
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) kp3
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) ku3
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) kp3
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) ku3
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) ku3


A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) ku5
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) ku5
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) kp5
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) kp5
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) kp5
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) ku5
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) kp5
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) ku5
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) ku5


A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) kp4
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) ku4
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) kp4
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) kp4
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) kp4
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) ku4
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) kp4
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) ku4
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) ku4


A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) ku6
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) kp6
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) ku6
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) ku6
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) kp6
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) ku6
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) kp6
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) ku6
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) ku6


A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) kp5
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) kp5
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) ku5
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) ku5
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) kp5
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) ku5
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) kp5
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) ku5
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) ku5


A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) ku7
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) ku7
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) ku7
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) ku7
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) kp7
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) ku7
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) kp7
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) ku7
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) ku7


A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) kp6
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) ku6
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) ku6
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) ku6
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) kp6
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) ku6
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) kp6
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) ku6
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) ku6


A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) ku5
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) kp5
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) kp5
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) ku5
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) kp5
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) ku5
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) kp5
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) ku5
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) ku5


A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) kp4
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) kp4
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) kp4
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) ku4
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) kp4
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) ku4
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) kp4
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) ku4
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) ku4


A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) ku6
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) ku6
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) kp6
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) ku6
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) kp6
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) ku6
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) kp6
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) ku6
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) ku6


A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) kp5
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) ku5
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) kp5
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) ku5
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) kp5
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) ku5
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) kp5
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) ku5
A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) ku5


A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) ku4
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) kp4
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) ku4
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) kp4
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) ku4
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) kp4
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) ku4
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) kp4
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) kp4


A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) kp3
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) kp3
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) ku3
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) kp3
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) ku3
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) kp3
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) ku3
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) kp3
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) kp3


A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) ku5
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) ku5
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) ku5
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) kp5
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) ku5
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) kp5
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) ku5
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) kp5
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) kp5


A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) kp4
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) ku4
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) ku4
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) kp4
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) ku4
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) kp4
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) ku4
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) kp4
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) kp4


A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) ku3
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) kp3
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) kp3
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) kp3
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) ku3
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) kp3
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) ku3
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) kp3
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) kp3


A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) kp2
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) kp2
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) kp2
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) kp2
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) ku2
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) kp2
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) ku2
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) kp2
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) kp2


A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) ku4
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) ku4
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) kp4
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) kp4
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) ku4
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) kp4
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) ku4
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) kp4
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) kp4


A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) kp3
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) ku3
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) kp3
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) kp3
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) ku3
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) kp3
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) ku3
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) kp3
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) kp3


A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) ku5
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) kp5
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) ku5
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) ku5
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) ku5
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) kp5
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) ku5
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) kp5
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) kp5


A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) kp4
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) kp4
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) ku4
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) ku4
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) ku4
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) kp4
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) ku4
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) kp4
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) kp4


A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) ku6
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) ku6
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) ku6
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) ku6
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) ku6
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) kp6
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) ku6
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) kp6
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) kp6


A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) kp5
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) ku5
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) ku5
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) ku5
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) ku5
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) kp5
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) ku5
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) kp5
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) kp5


A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) ku4
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) kp4
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) kp4
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) ku4
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) ku4
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) kp4
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) ku4
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) kp4
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) kp4


A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) kp3
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) kp3
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) kp3
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) ku3
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) ku3
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) kp3
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) ku3
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) kp3
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) kp3


A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) ku5
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) ku5
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) kp5
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) ku5
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) ku5
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) kp5
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) ku5
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) kp5
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) kp5


A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) kp4
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) ku4
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) kp4
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) ku4
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) ku4
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) kp4
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) ku4
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) kp4
A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) kp4


A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) ku3
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) kp3
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) ku3
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) kp3
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) kp3
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) kp3
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) ku3
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) kp3
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) kp3


A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) kp2
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) kp2
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) ku2
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) kp2
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) kp2
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) kp2
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) ku2
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) kp2
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) kp2


A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) ku4
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) ku4
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) ku4
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) kp4
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) kp4
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) kp4
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) ku4
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) kp4
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) kp4


A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) kp3
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) ku3
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) ku3
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) kp3
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) kp3
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) kp3
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) ku3
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) kp3
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) kp3


A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) ku2
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) kp2
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) kp2
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) kp2
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) kp2
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) kp2
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) ku2
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) kp2
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) kp2


A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) kp1
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) kp1
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) kp1
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) kp1
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) kp1
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) kp1
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) ku1
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) kp1
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) kp1


A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) ku3
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) ku3
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) kp3
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) kp3
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) kp3
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) kp3
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) ku3
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) kp3
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) kp3


A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) kp2
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) ku2
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) kp2
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) kp2
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) kp2
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) kp2
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) ku2
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) kp2
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) kp2


A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) ku4
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) kp4
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) ku4
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) ku4
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) kp4
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) kp4
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) ku4
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) kp4
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) kp4


A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) kp3
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) kp3
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) ku3
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) ku3
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) kp3
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) kp3
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) ku3
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) kp3
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) kp3


A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) ku5
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) ku5
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) ku5
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) ku5
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) kp5
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) kp5
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) ku5
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) kp5
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) kp5


A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) kp4
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) ku4
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) ku4
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) ku4
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) kp4
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) kp4
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) ku4
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) kp4
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) kp4


A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) ku3
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) kp3
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) kp3
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) ku3
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) kp3
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) kp3
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) ku3
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) kp3
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) kp3


A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) kp2
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) kp2
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) kp2
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) ku2
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) kp2
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) kp2
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) ku2
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) kp2
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) kp2


A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) ku4
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) ku4
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) kp4
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) ku4
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) kp4
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) kp4
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) ku4
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) kp4
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) kp4


A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) kp3
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) ku3
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) kp3
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) ku3
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) kp3
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) kp3
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) ku3
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) kp3
A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) kp3


A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) ku5
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) kp5
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) ku5
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) kp5
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) ku5
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) ku5
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) ku5
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) kp5
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) kp5


A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) kp4
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) kp4
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) ku4
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) kp4
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) ku4
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) ku4
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) ku4
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) kp4
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) kp4


A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) ku6
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) ku6
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) ku6
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) kp6
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) ku6
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) ku6
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) ku6
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) kp6
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) kp6


A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) kp5
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) ku5
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) ku5
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) kp5
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) ku5
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) ku5
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) ku5
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) kp5
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) kp5


A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) ku4
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) kp4
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) kp4
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) kp4
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) ku4
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) ku4
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) ku4
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) kp4
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) kp4


A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) kp3
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) kp3
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) kp3
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) kp3
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) ku3
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) ku3
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) ku3
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) kp3
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) kp3


A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) ku5
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) ku5
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) kp5
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) kp5
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) ku5
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) ku5
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) ku5
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) kp5
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) kp5


A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) kp4
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) ku4
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) kp4
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) kp4
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) ku4
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) ku4
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) ku4
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) kp4
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) kp4


A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) ku6
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) kp6
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) ku6
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) ku6
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) ku6
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) ku6
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) ku6
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) kp6
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) kp6


A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) kp5
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) kp5
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) ku5
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) ku5
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) ku5
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) ku5
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) ku5
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) kp5
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) kp5


A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) ku7
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) ku7
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) ku7
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) ku7
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) ku7
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) ku7
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) ku7
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) kp7
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) kp7


A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) kp6
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) ku6
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) ku6
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) ku6
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) ku6
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) ku6
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) ku6
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) kp6
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) kp6


A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) ku5
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) kp5
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) kp5
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) ku5
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) ku5
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) ku5
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) ku5
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) kp5
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) kp5


A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) kp4
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) kp4
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) kp4
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) ku4
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) ku4
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) ku4
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) ku4
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) kp4
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) kp4


A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) ku6
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) ku6
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) kp6
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) ku6
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) ku6
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) ku6
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) ku6
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) kp6
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) kp6


A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) kp5
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) ku5
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) kp5
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) ku5
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) ku5
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) ku5
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) ku5
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) kp5
A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) kp5


A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) ku4
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) kp4
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) ku4
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) kp4
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) kp4
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) ku4
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) ku4
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) kp4
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) kp4


A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) kp3
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) kp3
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) ku3
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) kp3
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) kp3
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) ku3
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) ku3
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) kp3
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) kp3


A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) ku5
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) ku5
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) ku5
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) kp5
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) kp5
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) ku5
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) ku5
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) kp5
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) kp5


A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) kp4
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) ku4
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) ku4
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) kp4
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) kp4
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) ku4
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) ku4
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) kp4
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) kp4


A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) ku3
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) kp3
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) kp3
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) kp3
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) kp3
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) ku3
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) ku3
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) kp3
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) kp3


A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) kp2
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) kp2
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) kp2
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) kp2
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) kp2
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) ku2
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) ku2
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) kp2
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) kp2


A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) ku4
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) ku4
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) kp4
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) kp4
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) kp4
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) ku4
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) ku4
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) kp4
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) kp4


A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) kp3
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) ku3
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) kp3
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) kp3
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) kp3
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) ku3
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) ku3
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) kp3
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) kp3


A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) ku5
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) kp5
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) ku5
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) ku5
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) kp5
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) ku5
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) ku5
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) kp5
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) kp5


A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) kp4
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) kp4
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) ku4
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) ku4
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) kp4
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) ku4
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) ku4
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) kp4
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) kp4


A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) ku6
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) ku6
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) ku6
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) ku6
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) kp6
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) ku6
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) ku6
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) kp6
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) kp6


A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) kp5
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) ku5
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) ku5
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) ku5
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) kp5
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) ku5
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) ku5
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) kp5
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) kp5


A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) ku4
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) kp4
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) kp4
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) ku4
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) kp4
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) ku4
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) ku4
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) kp4
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) kp4


A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) kp3
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) kp3
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) kp3
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) ku3
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) kp3
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) ku3
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) ku3
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) kp3
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) kp3


A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) ku5
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) ku5
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) kp5
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) ku5
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) kp5
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) ku5
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) ku5
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) kp5
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) kp5


A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) kp4
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) ku4
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) kp4
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) ku4
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) kp4
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) ku4
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) ku4
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) kp4
A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) kp4


A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) ku3
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) kp3
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) ku3
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) kp3
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) ku3
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) kp3
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) kp3
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) kp3
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) kp3


A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) kp2
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) kp2
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) ku2
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) kp2
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) ku2
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) kp2
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) kp2
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) kp2
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) kp2


A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) ku4
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) ku4
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) ku4
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) kp4
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) ku4
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) kp4
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) kp4
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) kp4
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) kp4


A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) kp3
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) ku3
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) ku3
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) kp3
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) ku3
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) kp3
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) kp3
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) kp3
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) kp3


A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) ku2
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) kp2
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) kp2
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) kp2
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) ku2
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) kp2
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) kp2
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) kp2
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) kp2


A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) kp1
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) kp1
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) kp1
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) kp1
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) ku1
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) kp1
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) kp1
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) kp1
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) kp1


A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) ku3
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) ku3
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) kp3
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) kp3
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) ku3
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) kp3
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) kp3
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) kp3
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) kp3


A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) kp2
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) ku2
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) kp2
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) kp2
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) ku2
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) kp2
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) kp2
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) kp2
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) kp2


A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) ku4
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) kp4
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) ku4
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) ku4
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) ku4
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) kp4
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) kp4
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) kp4
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) kp4


A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) kp3
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) kp3
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) ku3
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) ku3
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) ku3
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) kp3
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) kp3
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) kp3
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) kp3


A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) ku5
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) ku5
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) ku5
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) ku5
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) ku5
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) kp5
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) kp5
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) kp5
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) kp5


A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) kp4
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) ku4
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) ku4
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) ku4
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) ku4
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) kp4
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) kp4
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) kp4
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) kp4


A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) ku3
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) kp3
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) kp3
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) ku3
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) ku3
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) kp3
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) kp3
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) kp3
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) kp3


A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) kp2
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) kp2
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) kp2
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) ku2
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) ku2
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) kp2
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) kp2
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) kp2
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) kp2


A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) ku4
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) ku4
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) kp4
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) ku4
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) ku4
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) kp4
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) kp4
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) kp4
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) kp4


A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) kp3
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) ku3
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) kp3
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) ku3
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) ku3
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) kp3
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) kp3
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) kp3
A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) kp3


A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) ku2
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) kp2
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) ku2
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) kp2
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) kp2
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) kp2
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) kp2
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) kp2
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) kp2


A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) kp1
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) kp1
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) ku1
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) kp1
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) kp1
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) kp1
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) kp1
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) kp1
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) kp1


A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) ku3
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) ku3
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) ku3
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) kp3
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) kp3
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) kp3
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) kp3
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) kp3
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) kp3


A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) kp2
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) ku2
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) ku2
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) kp2
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) kp2
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) kp2
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) kp2
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) kp2
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) kp2


A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) ku1
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) kp1
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) kp1
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) kp1
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) kp1
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) kp1
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) kp1
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) kp1
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) kp1


A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) kp0
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) kp0
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) kp0
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) kp0
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) kp0
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) kp0
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) kp0
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) kp0
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) kp0


A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) ku2
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) ku2
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) kp2
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) kp2
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) kp2
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) kp2
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) kp2
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) kp2
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) kp2


A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) kp1
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) ku1
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) kp1
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) kp1
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) kp1
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) kp1
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) kp1
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) kp1
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) kp1


A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) ku3
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) kp3
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) ku3
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) ku3
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) kp3
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) kp3
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) kp3
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) kp3
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) kp3


A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) kp2
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) kp2
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) ku2
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) ku2
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) kp2
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) kp2
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) kp2
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) kp2
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) kp2


A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) ku4
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) ku4
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) ku4
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) ku4
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) kp4
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) kp4
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) kp4
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) kp4
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) kp4


A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) kp3
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) ku3
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) ku3
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) ku3
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) kp3
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) kp3
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) kp3
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) kp3
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) kp3


A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) ku2
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) kp2
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) kp2
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) ku2
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) kp2
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) kp2
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) kp2
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) kp2
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) kp2


A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) kp1
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) kp1
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) kp1
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) ku1
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) kp1
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) kp1
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) kp1
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) kp1
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) kp1


A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) ku3
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) ku3
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) kp3
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) ku3
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) kp3
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) kp3
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) kp3
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) kp3
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) kp3


A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) kp2
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) ku2
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) kp2
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) ku2
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) kp2
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) kp2
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) kp2
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) kp2
A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) kp2


A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) ku4
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) kp4
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) ku4
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) kp4
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) ku4
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) ku4
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) kp4
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) kp4
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) kp4


A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) kp3
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) kp3
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) ku3
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) kp3
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) ku3
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) ku3
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) kp3
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) kp3
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) kp3


A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) ku5
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) ku5
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) ku5
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) kp5
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) ku5
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) ku5
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) kp5
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) kp5
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) kp5


A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) kp4
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) ku4
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) ku4
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) kp4
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) ku4
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) ku4
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) kp4
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) kp4
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) kp4


A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) ku3
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) kp3
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) kp3
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) kp3
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) ku3
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) ku3
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) kp3
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) kp3
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) kp3


A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) kp2
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) kp2
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) kp2
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) kp2
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) ku2
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) ku2
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) kp2
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) kp2
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) kp2


A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) ku4
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) ku4
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) kp4
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) kp4
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) ku4
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) ku4
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) kp4
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) kp4
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) kp4


A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) kp3
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) ku3
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) kp3
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) kp3
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) ku3
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) ku3
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) kp3
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) kp3
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) kp3


A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) ku5
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) kp5
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) ku5
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) ku5
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) ku5
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) ku5
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) kp5
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) kp5
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) kp5


A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) kp4
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) kp4
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) ku4
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) ku4
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) ku4
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) ku4
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) kp4
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) kp4
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) kp4


A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) ku6
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) ku6
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) ku6
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) ku6
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) ku6
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) ku6
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) kp6
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) kp6
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) kp6


A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) kp5
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) ku5
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) ku5
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) ku5
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) ku5
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) ku5
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) kp5
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) kp5
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) kp5


A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) ku4
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) kp4
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) kp4
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) ku4
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) ku4
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) ku4
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) kp4
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) kp4
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) kp4


A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) kp3
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) kp3
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) kp3
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) ku3
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) ku3
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) ku3
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) kp3
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) kp3
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) kp3


A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) ku5
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) ku5
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) kp5
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) ku5
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) ku5
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) ku5
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) kp5
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) kp5
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) kp5


A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) kp4
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) ku4
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) kp4
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) ku4
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) ku4
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) ku4
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) kp4
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) kp4
A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) kp4


A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) ku3
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) kp3
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) ku3
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) kp3
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) kp3
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) ku3
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) kp3
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) kp3
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) kp3


A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) kp2
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) kp2
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) ku2
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) kp2
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) kp2
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) ku2
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) kp2
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) kp2
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) kp2


A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) ku4
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) ku4
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) ku4
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) kp4
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) kp4
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) ku4
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) kp4
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) kp4
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) kp4


A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) kp3
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) ku3
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) ku3
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) kp3
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) kp3
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) ku3
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) kp3
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) kp3
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) kp3


A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) ku2
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) kp2
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) kp2
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) kp2
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) kp2
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) ku2
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) kp2
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) kp2
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) kp2


A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) kp1
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) kp1
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) kp1
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) kp1
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) kp1
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) ku1
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) kp1
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) kp1
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) kp1


A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) ku3
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) ku3
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) kp3
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) kp3
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) kp3
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) ku3
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) kp3
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) kp3
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) kp3


A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) kp2
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) ku2
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) kp2
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) kp2
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) kp2
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) ku2
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) kp2
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) kp2
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) kp2


A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) ku4
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) kp4
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) ku4
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) ku4
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) kp4
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) ku4
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) kp4
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) kp4
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) kp4


A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) kp3
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) kp3
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) ku3
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) ku3
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) kp3
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) ku3
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) kp3
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) kp3
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) kp3


A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) ku5
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) ku5
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) ku5
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) ku5
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) kp5
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) ku5
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) kp5
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) kp5
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) kp5


A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) kp4
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) ku4
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) ku4
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) ku4
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) kp4
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) ku4
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) kp4
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) kp4
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) kp4


A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) ku3
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) kp3
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) kp3
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) ku3
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) kp3
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) ku3
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) kp3
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) kp3
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) kp3


A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) kp2
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) kp2
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) kp2
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) ku2
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) kp2
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) ku2
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) kp2
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) kp2
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) kp2


A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) ku4
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) ku4
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) kp4
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) ku4
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) kp4
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) ku4
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) kp4
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) kp4
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) kp4


A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) kp3
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) ku3
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) kp3
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) ku3
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) kp3
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) ku3
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) kp3
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) kp3
A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) kp3


A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) ku5
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) kp5
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) ku5
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) kp5
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) ku5
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) kp5
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) ku5
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) ku5
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) kp5


A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) kp4
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) kp4
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) ku4
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) kp4
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) ku4
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) kp4
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) ku4
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) ku4
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) kp4


A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) ku6
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) ku6
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) ku6
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) kp6
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) ku6
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) kp6
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) ku6
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) ku6
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) kp6


A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) kp5
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) ku5
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) ku5
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) kp5
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) ku5
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) kp5
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) ku5
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) ku5
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) kp5


A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) ku4
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) kp4
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) kp4
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) kp4
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) ku4
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) kp4
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) ku4
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) ku4
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) kp4


A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) kp3
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) kp3
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) kp3
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) kp3
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) ku3
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) kp3
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) ku3
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) ku3
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) kp3


A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) ku5
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) ku5
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) kp5
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) kp5
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) ku5
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) kp5
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) ku5
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) ku5
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) kp5


A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) kp4
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) ku4
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) kp4
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) kp4
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) ku4
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) kp4
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) ku4
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) ku4
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) kp4


A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) ku6
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) kp6
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) ku6
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) ku6
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) ku6
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) kp6
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) ku6
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) ku6
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) kp6


A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) kp5
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) kp5
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) ku5
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) ku5
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) ku5
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) kp5
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) ku5
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) ku5
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) kp5


A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) ku7
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) ku7
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) ku7
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) ku7
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) ku7
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) kp7
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) ku7
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) ku7
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) kp7


A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) kp6
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) ku6
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) ku6
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) ku6
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) ku6
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) kp6
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) ku6
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) ku6
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) kp6


A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) ku5
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) kp5
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) kp5
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) ku5
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) ku5
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) kp5
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) ku5
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) ku5
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) kp5


A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) kp4
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) kp4
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) kp4
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) ku4
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) ku4
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) kp4
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) ku4
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) ku4
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) kp4


A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) ku6
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) ku6
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) kp6
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) ku6
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) ku6
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) kp6
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) ku6
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) ku6
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) kp6


A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) kp5
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) ku5
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) kp5
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) ku5
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) ku5
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) kp5
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) ku5
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) ku5
A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) kp5


A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) ku4
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) kp4
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) ku4
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) kp4
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) kp4
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) kp4
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) ku4
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) ku4
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) kp4


A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) kp3
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) kp3
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) ku3
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) kp3
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) kp3
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) kp3
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) ku3
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) ku3
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) kp3


A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) ku5
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) ku5
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) ku5
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) kp5
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) kp5
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) kp5
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) ku5
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) ku5
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) kp5


A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) kp4
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) ku4
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) ku4
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) kp4
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) kp4
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) kp4
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) ku4
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) ku4
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) kp4


A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) ku3
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) kp3
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) kp3
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) kp3
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) kp3
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) kp3
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) ku3
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) ku3
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) kp3


A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) kp2
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) kp2
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) kp2
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) kp2
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) kp2
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) kp2
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) ku2
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) ku2
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) kp2


A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) ku4
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) ku4
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) kp4
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) kp4
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) kp4
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) kp4
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) ku4
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) ku4
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) kp4


A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) kp3
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) ku3
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) kp3
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) kp3
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) kp3
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) kp3
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) ku3
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) ku3
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) kp3


A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) ku5
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) kp5
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) ku5
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) ku5
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) kp5
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) kp5
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) ku5
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) ku5
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) kp5


A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) kp4
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) kp4
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) ku4
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) ku4
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) kp4
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) kp4
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) ku4
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) ku4
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) kp4


A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) ku6
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) ku6
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) ku6
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) ku6
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) kp6
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) kp6
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) ku6
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) ku6
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) kp6


A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) kp5
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) ku5
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) ku5
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) ku5
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) kp5
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) kp5
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) ku5
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) ku5
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) kp5


A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) ku4
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) kp4
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) kp4
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) ku4
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) kp4
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) kp4
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) ku4
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) ku4
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) kp4


A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) kp3
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) kp3
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) kp3
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) ku3
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) kp3
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) kp3
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) ku3
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) ku3
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) kp3


A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) ku5
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) ku5
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) kp5
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) ku5
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) kp5
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) kp5
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) ku5
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) ku5
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) kp5


A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) kp4
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) ku4
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) kp4
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) ku4
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) kp4
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) kp4
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) ku4
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) ku4
A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) kp4


A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) ku6
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) kp6
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) ku6
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) kp6
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) ku6
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) ku6
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) ku6
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) ku6
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) kp6


A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) kp5
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) kp5
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) ku5
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) kp5
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) ku5
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) ku5
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) ku5
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) ku5
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) kp5


A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) ku7
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) ku7
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) ku7
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) kp7
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) ku7
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) ku7
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) ku7
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) ku7
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) kp7


A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) kp6
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) ku6
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) ku6
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) kp6
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) ku6
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) ku6
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) ku6
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) ku6
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) kp6


A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) ku5
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) kp5
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) kp5
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) kp5
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) ku5
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) ku5
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) ku5
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) ku5
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) kp5


A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) kp4
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) kp4
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) kp4
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) kp4
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) ku4
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) ku4
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) ku4
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) ku4
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) kp4


A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) ku6
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) ku6
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) kp6
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) kp6
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) ku6
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) ku6
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) ku6
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) ku6
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) kp6


A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) kp5
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) ku5
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) kp5
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) kp5
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) ku5
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) ku5
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) ku5
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) ku5
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) kp5


A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) ku7
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) kp7
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) ku7
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) ku7
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) ku7
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) ku7
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) ku7
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) ku7
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) kp7


A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) kp6
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) kp6
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) ku6
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) ku6
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) ku6
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) ku6
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) ku6
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) ku6
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) kp6


A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) ku8
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) ku8
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) ku8
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) ku8
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) ku8
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) ku8
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) ku8
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) ku8
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) kp8


A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) kp7
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) ku7
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) ku7
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) ku7
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) ku7
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) ku7
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) ku7
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) ku7
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) kp7


A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) ku6
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) kp6
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) kp6
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) ku6
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) ku6
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) ku6
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) ku6
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) ku6
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) kp6


A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) kp5
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) kp5
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) kp5
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) ku5
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) ku5
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) ku5
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) ku5
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) ku5
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) kp5


A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) ku7
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) ku7
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) kp7
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) ku7
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) ku7
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) ku7
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) ku7
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) ku7
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) kp7


A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) kp6
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) ku6
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) kp6
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) ku6
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) ku6
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) ku6
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) ku6
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) ku6
A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) kp6


A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) ku5
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) kp5
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) ku5
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) kp5
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) kp5
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) ku5
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) ku5
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) ku5
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) kp5


A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) kp4
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) kp4
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) ku4
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) kp4
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) kp4
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) ku4
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) ku4
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) ku4
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) kp4


A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) ku6
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) ku6
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) ku6
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) kp6
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) kp6
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) ku6
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) ku6
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) ku6
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) kp6


A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) kp5
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) ku5
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) ku5
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) kp5
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) kp5
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) ku5
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) ku5
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) ku5
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) kp5


A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) ku4
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) kp4
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) kp4
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) kp4
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) kp4
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) ku4
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) ku4
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) ku4
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) kp4


A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) kp3
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) kp3
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) kp3
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) kp3
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) kp3
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) ku3
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) ku3
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) ku3
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) kp3


A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) ku5
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) ku5
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) kp5
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) kp5
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) kp5
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) ku5
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) ku5
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) ku5
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) kp5


A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) kp4
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) ku4
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) kp4
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) kp4
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) kp4
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) ku4
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) ku4
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) ku4
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) kp4


A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) ku6
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) kp6
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) ku6
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) ku6
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) kp6
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) ku6
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) ku6
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) ku6
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) kp6


A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) kp5
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) kp5
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) ku5
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) ku5
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) kp5
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) ku5
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) ku5
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) ku5
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) kp5


A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) ku7
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) ku7
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) ku7
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) ku7
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) kp7
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) ku7
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) ku7
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) ku7
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) kp7


A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) kp6
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) ku6
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) ku6
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) ku6
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) kp6
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) ku6
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) ku6
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) ku6
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) kp6


A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) ku5
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) kp5
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) kp5
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) ku5
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) kp5
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) ku5
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) ku5
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) ku5
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) kp5


A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) kp4
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) kp4
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) kp4
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) ku4
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) kp4
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) ku4
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) ku4
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) ku4
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) kp4


A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) ku6
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) ku6
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) kp6
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) ku6
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) kp6
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) ku6
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) ku6
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) ku6
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) kp6


A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) kp5
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) ku5
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) kp5
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) ku5
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) kp5
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) ku5
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) ku5
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) ku5
A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) kp5


A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) ku4
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) kp4
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) ku4
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) kp4
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) ku4
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) kp4
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) kp4
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) ku4
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) kp4


A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) kp3
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) kp3
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) ku3
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) kp3
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) ku3
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) kp3
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) kp3
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) ku3
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) kp3


A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) ku5
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) ku5
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) ku5
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) kp5
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) ku5
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) kp5
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) kp5
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) ku5
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) kp5


A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) kp4
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) ku4
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) ku4
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) kp4
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) ku4
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) kp4
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) kp4
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) ku4
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) kp4


A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) ku3
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) kp3
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) kp3
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) kp3
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) ku3
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) kp3
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) kp3
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) ku3
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) kp3


A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) kp2
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) kp2
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) kp2
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) kp2
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) ku2
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) kp2
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) kp2
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) ku2
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) kp2


A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) ku4
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) ku4
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) kp4
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) kp4
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) ku4
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) kp4
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) kp4
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) ku4
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) kp4


A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) kp3
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) ku3
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) kp3
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) kp3
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) ku3
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) kp3
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) kp3
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) ku3
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) kp3


A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) ku5
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) kp5
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) ku5
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) ku5
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) ku5
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) kp5
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) kp5
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) ku5
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) kp5


A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) kp4
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) kp4
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) ku4
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) ku4
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) ku4
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) kp4
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) kp4
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) ku4
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) kp4


A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) ku6
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) ku6
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) ku6
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) ku6
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) ku6
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) kp6
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) kp6
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) ku6
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) kp6


A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) kp5
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) ku5
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) ku5
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) ku5
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) ku5
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) kp5
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) kp5
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) ku5
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) kp5


A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) ku4
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) kp4
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) kp4
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) ku4
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) ku4
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) kp4
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) kp4
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) ku4
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) kp4


A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) kp3
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) kp3
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) kp3
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) ku3
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) ku3
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) kp3
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) kp3
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) ku3
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) kp3


A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) ku5
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) ku5
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) kp5
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) ku5
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) ku5
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) kp5
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) kp5
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) ku5
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) kp5


A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) kp4
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) ku4
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) kp4
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) ku4
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) ku4
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) kp4
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) kp4
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) ku4
A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) kp4


A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) ku3
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) kp3
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) ku3
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) kp3
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) kp3
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) kp3
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) kp3
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) ku3
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) kp3


A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) kp2
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) kp2
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) ku2
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) kp2
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) kp2
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) kp2
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) kp2
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) ku2
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) kp2


A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) ku4
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) ku4
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) ku4
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) kp4
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) kp4
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) kp4
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) kp4
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) ku4
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) kp4


A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) kp3
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) ku3
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) ku3
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) kp3
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) kp3
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) kp3
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) kp3
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) ku3
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) kp3


A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) ku2
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) kp2
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) kp2
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) kp2
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) kp2
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) kp2
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) kp2
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) ku2
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) kp2


A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) kp1
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) kp1
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) kp1
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) kp1
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) kp1
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) kp1
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) kp1
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) ku1
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) kp1


A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) ku3
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) ku3
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) kp3
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) kp3
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) kp3
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) kp3
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) kp3
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) ku3
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) kp3


A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) kp2
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) ku2
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) kp2
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) kp2
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) kp2
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) kp2
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) kp2
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) ku2
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) kp2


A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) ku4
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) kp4
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) ku4
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) ku4
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) kp4
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) kp4
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) kp4
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) ku4
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) kp4


A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) kp3
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) kp3
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) ku3
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) ku3
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) kp3
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) kp3
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) kp3
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) ku3
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) kp3


A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) ku5
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) ku5
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) ku5
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) ku5
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) kp5
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) kp5
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) kp5
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) ku5
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) kp5


A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) kp4
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) ku4
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) ku4
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) ku4
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) kp4
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) kp4
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) kp4
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) ku4
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) kp4


A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) ku3
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) kp3
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) kp3
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) ku3
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) kp3
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) kp3
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) kp3
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) ku3
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) kp3


A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) kp2
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) kp2
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) kp2
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) ku2
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) kp2
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) kp2
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) kp2
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) ku2
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) kp2


A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) ku4
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) ku4
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) kp4
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) ku4
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) kp4
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) kp4
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) kp4
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) ku4
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) kp4


A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) kp3
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) ku3
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) kp3
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) ku3
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) kp3
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) kp3
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) kp3
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) ku3
A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) kp3


A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) ku5
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) kp5
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) ku5
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) kp5
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) ku5
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~p) ku5
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) kp5
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) ku5
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) kp5


A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) kp4
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) kp4
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) ku4
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) kp4
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) ku4
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~u,s9~u) ku4
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) kp4
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) ku4
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) kp4


A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) ku6
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) ku6
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) ku6
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) kp6
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) ku6
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~p) ku6
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) kp6
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) ku6
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) kp6


A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) kp5
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) ku5
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) ku5
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) kp5
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) ku5
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~p,s8~p,s9~u) ku5
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) kp5
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) ku5
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) kp5


A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) ku4
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) kp4
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) kp4
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) kp4
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) ku4
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~p) ku4
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) kp4
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) ku4
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) kp4


A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) kp3
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) kp3
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) kp3
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) kp3
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) ku3
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~u,s9~u) ku3
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) kp3
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) ku3
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) kp3


A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) ku5
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) ku5
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) kp5
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) kp5
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) ku5
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~p) ku5
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) kp5
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) ku5
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) kp5


A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) kp4
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) ku4
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) kp4
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) kp4
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) ku4
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~u,s7~u,s8~p,s9~u) ku4
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) kp4
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) ku4
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) kp4


A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) ku6
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) kp6
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) ku6
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) ku6
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) ku6
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~p) ku6
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) kp6
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) ku6
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) kp6


A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) kp5
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) kp5
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) ku5
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) ku5
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) ku5
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~u,s9~u) ku5
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) kp5
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) ku5
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) kp5


A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) ku7
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) ku7
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) ku7
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) ku7
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) ku7
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~p) ku7
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) kp7
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) ku7
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) kp7


A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) kp6
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) ku6
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) ku6
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) ku6
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) ku6
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~p,s8~p,s9~u) ku6
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) kp6
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) ku6
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) kp6


A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) ku5
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) kp5
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) kp5
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) ku5
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) ku5
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~p) ku5
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) kp5
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) ku5
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) kp5


A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) kp4
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) kp4
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) kp4
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) ku4
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) ku4
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~u,s9~u) ku4
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) kp4
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) ku4
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) kp4


A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) ku6
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) ku6
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) kp6
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) ku6
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) ku6
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~p) ku6
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) kp6
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) ku6
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) kp6


A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) kp5
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) ku5
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) kp5
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) ku5
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) ku5
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~p,s6~p,s7~u,s8~p,s9~u) ku5
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) kp5
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) ku5
A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) kp5


A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) ku4
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) kp4
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) ku4
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) kp4
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~p) kp4
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~p) ku4
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) kp4
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) ku4
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) kp4


A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) kp3
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) kp3
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) ku3
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) kp3
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~u,s9~u) kp3
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~u,s9~u) ku3
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) kp3
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) ku3
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) kp3


A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) ku5
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) ku5
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) ku5
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) kp5
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~p) kp5
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~p) ku5
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) kp5
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) ku5
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) kp5


A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) kp4
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) ku4
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) ku4
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) kp4
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~p,s8~p,s9~u) kp4
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~p,s8~p,s9~u) ku4
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) kp4
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) ku4
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) kp4


A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) ku3
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) kp3
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) kp3
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) kp3
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~p) kp3
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~p) ku3
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) kp3
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) ku3
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) kp3


A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) kp2
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) kp2
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) kp2
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) kp2
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~u,s9~u) kp2
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~u,s9~u) ku2
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) kp2
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) ku2
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) kp2


A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) ku4
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) ku4
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) kp4
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) kp4
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~p) kp4
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~p) ku4
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) kp4
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) ku4
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) kp4


A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) kp3
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) ku3
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) kp3
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) kp3
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~u,s7~u,s8~p,s9~u) kp3
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~u,s7~u,s8~p,s9~u) ku3
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) kp3
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) ku3
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) kp3


A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) ku5
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) kp5
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) ku5
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~p) ku5
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~p) kp5
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~p) ku5
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) kp5
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) ku5
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) kp5


A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) kp4
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) kp4
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) ku4
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~u,s9~u) ku4
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~u,s9~u) kp4
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~u,s9~u) ku4
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) kp4
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) ku4
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) kp4


A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) ku6
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) ku6
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) ku6
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~p) ku6
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~p) kp6
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~p) ku6
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) kp6
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) ku6
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) kp6


A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) kp5
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) ku5
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) ku5
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~p,s8~p,s9~u) ku5
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~p,s8~p,s9~u) kp5
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~p,s8~p,s9~u) ku5
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) kp5
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) ku5
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) kp5


A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) ku4
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) kp4
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~p) kp4
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~p) ku4
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~p) kp4
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~p) ku4
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) kp4
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) ku4
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) kp4


A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) kp3
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) kp3
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~u,s9~u) kp3
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~u,s9~u) ku3
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~u,s9~u) kp3
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~u,s9~u) ku3
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) kp3
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) ku3
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) kp3


A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) ku5
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~p) ku5
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~p) kp5
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~p) ku5
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~p) kp5
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~p) ku5
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) kp5
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) ku5
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) kp5


A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~p) kp4
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~u,s9~u) ku4
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~p,s8~p,s9~u) kp4
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~u,s7~u,s8~p,s9~u) ku4
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~p,s5~p,s6~p,s7~u,s8~p,s9~u) kp4
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~u,s4~u,s5~u,s6~p,s7~u,s8~p,s9~u) ku4
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~p,s3~p,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) kp4
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~u,s2~u,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) ku4
A(s1~u,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) -> A(s1~p,s2~p,s3~u,s4~p,s5~u,s6~p,s7~u,s8~p,s9~u) kp4


end reaction rules

generate_network({overwrite=>1});