begin parameters
kp0 3
ku1 14
kp1 15
ku2 98
kp2 75
ku3 686
Stot 100
end parameters

begin molecule types
A(s1~u~p,s2~u~p,s3~u~p,p)
P(l,r)
end molecule types

begin seed species
A(s1~u,s2~u,s3~u,p!1).P(l!1,r) Stot
end seed species




begin reaction rules
A(s1~u,p!1).P(l!1,r) -> A(s1~p,p!1).P(l!2,r).P(l!1,r!2) kp0
A(s2~u,p!1).P(l!1,r) -> A(s2~p,p!1).P(l!2,r).P(l!1,r!2) kp0
A(s3~u,p!1).P(l!1,r) -> A(s3~p,p!1).P(l!2,r).P(l!1,r!2) kp0
A(s1~u,p!1).P(l!1,r!2).P(l!2,r) -> A(s1~p,p!1).P(l!2,r!3).P(l!3,r).P(l!1,r!2) kp1
A(s1~p,p!1).P(l!2,r).P(l!1,r!2) -> A(s1~u,p!1).P(l!1,r) ku1
A(s2~u,p!1).P(l!1,r!2).P(l!2,r) -> A(s2~p,p!1).P(l!2,r!3).P(l!3,r).P(l!1,r!2) kp1
A(s2~p,p!1).P(l!2,r).P(l!1,r!2) -> A(s2~u,p!1).P(l!1,r) ku1
A(s3~u,p!1).P(l!1,r!2).P(l!2,r) -> A(s3~p,p!1).P(l!2,r!3).P(l!3,r).P(l!1,r!2) kp1
A(s3~p,p!1).P(l!2,r).P(l!1,r!2) -> A(s3~u,p!1).P(l!1,r) ku1
A(s1~u,p!1).P(l!1,r!2).P(l!2,r!3).P(l!3,r) -> A(s1~p,p!1).P(l!2,r!3).P(l!3,r!4).P(l!4,r).P(l!1,r!2) kp2
A(s1~p,p!1).P(l!2,r!3).P(l!3,r).P(l!1,r!2) -> A(s1~u,p!1).P(l!1,r!2).P(l!2,r) ku2
A(s2~u,p!1).P(l!1,r!2).P(l!2,r!3).P(l!3,r) -> A(s2~p,p!1).P(l!2,r!3).P(l!3,r!4).P(l!4,r).P(l!1,r!2) kp2
A(s2~p,p!1).P(l!2,r!3).P(l!3,r).P(l!1,r!2) -> A(s2~u,p!1).P(l!1,r!2).P(l!2,r) ku2
A(s3~u,p!1).P(l!1,r!2).P(l!2,r!3).P(l!3,r) -> A(s3~p,p!1).P(l!2,r!3).P(l!3,r!4).P(l!4,r).P(l!1,r!2) kp2
A(s3~p,p!1).P(l!2,r!3).P(l!3,r).P(l!1,r!2) -> A(s3~u,p!1).P(l!1,r!2).P(l!2,r) ku2
A(s1~p,p!1).P(l!2,r!3).P(l!3,r!4).P(l!4,r).P(l!1,r!2) -> A(s1~u,p!1).P(l!1,r!2).P(l!2,r!3).P(l!3,r) ku3
A(s2~p,p!1).P(l!2,r!3).P(l!3,r!4).P(l!4,r).P(l!1,r!2) -> A(s2~u,p!1).P(l!1,r!2).P(l!2,r!3).P(l!3,r) ku3
A(s3~p,p!1).P(l!2,r!3).P(l!3,r!4).P(l!4,r).P(l!1,r!2) -> A(s3~u,p!1).P(l!1,r!2).P(l!2,r!3).P(l!3,r) ku3
end reaction rules

generate_network({overwrite=>1});