begin model
begin parameters
    Na    6.022e23    # Avogadro's [mol^-1]
    V      1.4e-15    # Cell volume [L]
    #
    c0    1e9         # M^-1 s^-1
    c1    224         # s^-1
    c2    9           # s^-1
    c3    0.5         # s^-1
    c4    5e-4        # s^-1
    c5    0.167       # s^-1
    c6    ln(2)/120  # s^-1
    c7    ln(2)/600  # s^-1
    #
    tF    1e-4        # telegraph factor
    rF    1000        # rna factor
    pF    1000        # protein factor
end parameters

begin molecule types
    Null()
    gTetR(lac1,lac2)
    gCI(tet1,tet2)
    gLacI(cI1,cI2)
    mTetR()
    mCI()
    mLacI()
    pTetR(cI)
    pCI(lac)
    pLacI(tet)
end molecule types

begin seed species
    Null()                                          1
    gTetR(lac1!1,lac2!2).pLacI(tet!1).pLacI(tet!2)    1
    gCI(tet1!1,tet2!2).pTetR(cI!1).pTetR(cI!2)        1
    gLacI(cI1!1,cI2!2).pCI(lac!1).pCI(lac!2)          1
    mTetR()                        3163
    mCI()                          6819
    mLacI()                        129
    pTetR(cI)                      183453
    pCI(lac)                       2006198
    pLacI(tet)                     165670
end seed species

begin observables
    Molecules    pTetR    pTetR(cI)
    Molecules    pCI      pCI(lac)
    Molecules    pLacI    pLacI(tet)
    Molecules    NULL     Null()
end observables

begin reaction rules
    gTetR(lac1,lac2) + pLacI(tet) <-> gTetR(lac1!1,lac2).pLacI(tet!1)        c0/Na/V*tF/pF, c1*tF
    gTetR(lac2,lac1) + pLacI(tet) <-> gTetR(lac2!1,lac1).pLacI(tet!1)        c0/Na/V*tF/pF, c1*tF

    gTetR(lac1!+,lac2) + pLacI(tet) <-> gTetR(lac1!+,lac2!1).pLacI(tet!1)    c0/Na/V*tF/pF, c2*tF
    gTetR(lac2!+,lac1) + pLacI(tet) <-> gTetR(lac2!+,lac1!1).pLacI(tet!1)    c0/Na/V*tF/pF, c2*tF

    gTetR(lac1,lac2) -> gTetR(lac1,lac2) + mTetR()                           c3*rF

    gTetR(lac1!+) -> gTetR(lac1!+) + mTetR()                               c4*rF
    gTetR(lac2!+) -> gTetR(lac2!+) + mTetR()                               c4*rF

    mTetR() -> mTetR() + pTetR(cI)                                       c5/rF*pF
    mTetR() + Null() -> Null()                                           c6
    pTetR(cI) + Null() -> Null()                                         c7
    #
    gCI(tet1,tet2) + pTetR(cI) <-> gCI(tet1!1,tet2).pTetR(cI!1)              c0/Na/V*tF/pF, c1*tF
    gCI(tet2,tet1) + pTetR(cI) <-> gCI(tet2!1,tet1).pTetR(cI!1)              c0/Na/V*tF/pF, c1*tF
    gCI(tet1!+,tet2) + pTetR(cI) <-> gCI(tet1!+,tet2!1).pTetR(cI!1)          c0/Na/V*tF/pF, c2*tF
    gCI(tet2!+,tet1) + pTetR(cI) <-> gCI(tet2!+,tet1!1).pTetR(cI!1)          c0/Na/V*tF/pF, c2*tF
    gCI(tet1,tet2) -> gCI(tet1,tet2) + mCI()                                 c3*rF
    gCI(tet1!+) -> gCI(tet1!+) + mCI()                                     c4*rF
    gCI(tet2!+) -> gCI(tet2!+) + mCI()                                     c4*rF

    mCI() -> mCI() + pCI(lac)                                            c5/rF*pF
    mCI() + Null() -> Null()                                             c6
    pCI(lac) + Null() -> Null()                                          c7
    #
    gLacI(cI1,cI2) + pCI(lac) <-> gLacI(cI1!1,cI2).pCI(lac!1)                c0/Na/V*tF/pF, c1*tF
    gLacI(cI2,cI1) + pCI(lac) <-> gLacI(cI2!1,cI1).pCI(lac!1)                c0/Na/V*tF/pF, c1*tF

    gLacI(cI1!+,cI2) + pCI(lac) <-> gLacI(cI1!+,cI2!1).pCI(lac!1)            c0/Na/V*tF/pF, c2*tF
    gLacI(cI2!+,cI1) + pCI(lac) <-> gLacI(cI2!+,cI1!1).pCI(lac!1)            c0/Na/V*tF/pF, c2*tF

    gLacI(cI1,cI2) -> gLacI(cI1,cI2) + mLacI()                               c3*rF

    gLacI(cI1!+) -> gLacI(cI1!+) + mLacI()                                 c4*rF
    gLacI(cI2!+) -> gLacI(cI2!+) + mLacI()                                 c4*rF

    mLacI() -> mLacI() + pLacI(tet)                                      c5/rF*pF
    mLacI() + Null() -> Null()                                           c6
    pLacI(tet) + Null() -> Null()                                        c7
end reaction rules
end model

generate_network({overwrite=>1})
#simulate({method=>"ode",t_end=>4e4,n_steps=>4e2,verbose=>1,atol=>1e-12,rtol=>1e-12})
#simulate({method=>"pla",t_end=>4e4,n_steps=>4e2,verbose=>1,pla_config=>"fEuler|pre-eps:sb|eps=0.03"})
